CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "_0") (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<compartment>[A-Z]{1})$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<sample>S[1-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does compartment "N")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does compartment "C")
    Name to assign these images:CELL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:CELL
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:SAMPLE
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\BH_TEST\\BH_TEST3.1\\REP_1\\cellprofiler\\cpTotImg\\BDN
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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